PsychoPy2experiment version="1.85.3"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Save excel file = True
  Window size (pixels) = [1024,768]
  Full-screen window = False
  Save log file = False
  expName = moa_v3
  Screen = 1
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Routines
  Routine trial
    PolygonComponent background
      fillColor [set every repeat] = [$bg_lvl,$bg_lvl,$bg_lvl]
      units = pix
      startVal [time (s)] = 0
      size = [1024,768]
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    PolygonComponent surround
      fillColor [set every repeat] = [$sur_lvl,$sur_lvl,$sur_lvl]
      units = pix
      startVal [time (s)] = 0
      nVertices = 120
      size = (500, 500)
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    PolygonComponent test
      fillColor [set every repeat] = [$tst_lvl,$tst_lvl,$tst_lvl]
      units = pix
      startVal [time (s)] = 0
      nVertices = 120
      size = (100, 100)
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    TextComponent counter
      text [set every repeat] = $trials.thisN+1
      pos = [0.9,-0.9]
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent resp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.1
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    CodeComponent code
      End Routine:
        expInfo['match'] = test.fillColor[1]
      Each Frame:
        key = event.getKeys(keyList=['down','up'])
        if key and key[0]=='down' and not np.all(test.fillColor<-0.99):
            test.fillColor-=[0.005,0.005,0.005]
        elif key and key[0]=='up' and not np.all(test.fillColor>0.99):
            test.fillColor+=[0.005,0.005,0.005]
  Routine thanks
    TextComponent text_2
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0
      letterHeight = 0.1
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      text:
        Experiment done

        Thanks!
  Routine instrux
    TextComponent text
      wrapWidth = 1.6
      units = norm
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        This experiment uses the Method of Adjustment to
        measure a contrast theshold for a target/surround stimulus.

        On each trial, use the up/down arrow keys to match the
        brightness of the target spot to the surround. Then
        press the spacebar to advance to the next trial. There
        are 10 trials in the experiment

        Press the spacebar to start.
    KeyboardComponent start_key
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine blank
    PolygonComponent blank_background
      fillColor [set every repeat] = $[-1,-1,-1]
      stopVal [duration (s)] = 1.0
      units = pix
      startVal [time (s)] = 0.0
      size = [1024,768]
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Flow
  Routine instrux
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = moa_trials.xlsx
    loopType = sequential
    nReps = 5
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    Routine trial
    Routine blank
  LoopTerminator trials
  Routine thanks
