PsychoPy2experiment version="1.85.3"
Settings
  Monitor = testMonitor
  color = $[0,0,0.45]
  colorSpace = hsv
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1024,768]
  Full-screen window = False
  expName = mol1
  Screen = 1
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Routines
  Routine trial
    PolygonComponent background
      fillColor [set every repeat] = [$bg_lvl,$bg_lvl,$bg_lvl]
      units = pix
      startVal [time (s)] = 0.0
      size = [1024,768]
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    PolygonComponent surround
      fillColor [set every repeat] = [$sur_lvl,$sur_lvl,$sur_lvl]
      units = pix
      startVal [time (s)] = 0
      nVertices = 120
      size = (500, 500)
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    PolygonComponent target
      fillColor [set every repeat] = [$tgt_lvl,$tgt_lvl,$tgt_lvl,]
      units = pix
      startVal [time (s)] = 0
      nVertices = 120
      size = (100, 100)
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    KeyboardComponent resp
      correctAns = $corrAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'b','d'
      startVal [time (s)] = 0.1
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    TextComponent counter
      text [set every repeat] = $trials.thisN+1
      pos = (0.9, -0.9)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine thanks
    TextComponent text_2
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0
      letterHeight = 0.1
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      text:
        Experiment done

        Thanks!
  Routine instrux
    TextComponent text
      wrapWidth = 1
      units = norm
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        This experiment uses the Method of Limits
        to measure a contrast threshold for a
        target/surround stimulus.

        Use the 'b' and 'd' keys to indicate
        whether the central target spot is
        brighter (b) or dimmer (d) than the
        surround. If you are not sure make
        your best guess.

        There are 110 trials in this experiment.

        Press the spacebar to start.
    KeyboardComponent start_key
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine blank
    PolygonComponent blank_background
      fillColor = $[-1,-1,-1]
      stopVal [duration (s)] = 1.0
      units = pix
      startVal [time (s)] = 0.0
      size = (1024, 768)
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Flow
  Routine instrux
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = mol_trials.xlsx
    loopType = sequential
    nReps = 5
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    Routine trial
    Routine blank
  LoopTerminator trials
  Routine thanks
