PsychoPy2experiment version="1.85.4"
Settings
  Monitor = testMonitor
  color = $[0,0,0.45]
  colorSpace = hsv
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [800,800]
  Full-screen window = False
  Show mouse = True
  expName = sdt70
  Screen = 1
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Routines
  Routine instrux
    TextComponent text
      wrapWidth = 1
      units = norm
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        This experiment implements a classic yes/no
        signal detection experiment

        The signal is a gabor target like the
        one shown to the right

        On each trial a circular background will
        appear and after a brief delay you will
        hear a beep. On some trials the gabor target
        will be presented along with the beep
        and on other trials it will be absent.
        To make the task more difficult, the
        position of the target will vary randomly
        from trial to trial.

        On each trial, your task is to indicate if
        the target was present or absent. Use the
        arrow keys as shown below to indicate your
        response.

        up arrow - yes, target present
        down arrow - no, target absent

        To familiarize you with the task, the main
        experiment will be preceeded by a short
        block of practice trials.

        There are 10 practice trials and 100
        experimental trials in the whole experiment.

        Press the spacebar to continue.
    KeyboardComponent start_key
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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    PolygonComponent polygon
      fillColor = $[0,0,0]
      pos = (0.5, 0.71)
      startVal [time (s)] = 0.0
      size = (0.15, 0.15)
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    GratingComponent grating_3
      opacity [set every repeat] = 0.25
      tex = sin
      mask = gauss
      pos [set every repeat] = [0.5,0.71]
      units = norm
      startVal [time (s)] = 0
      sf [set every repeat] = 4
      size = [0.1,0.1]
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  Routine practice_banner
    TextComponent text_3
      wrapWidth = 1
      units = norm
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        PRACTICE TRIALS

        Press the spacebar to continue.
    KeyboardComponent start_key_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine main_banner
    TextComponent text_4
      wrapWidth = 1
      units = norm
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        EXPERIMENTAL TRIALS

        Press the spacebar to continue.
    KeyboardComponent start_key_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial
    CodeComponent code
      Begin Routine:
        tgt_radius = random()*circ_radius*0.95
        angle = random()*359
        xpos = tgt_radius*cos(angle)
        ypos = tgt_radius*sin(angle)
        tgt_visibility = tgt_opacity*SorN
    PolygonComponent background
      fillColor = $[-0.075,-0.075,-0.075]
      units = pix
      startVal [time (s)] = 0.0
      size = [800,800]
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    PolygonComponent surround
      fillColor [set every repeat] = $[0,0,0]
      units = pix
      startVal [time (s)] = 0
      nVertices = 120
      size = (600, 600)
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    GratingComponent grating
      opacity [set every repeat] = $tgt_visibility
      tex = sin
      stopVal [duration (s)] = $tgt_sec
      mask = gauss
      pos [set every repeat] = $[xpos,ypos]
      units = norm
      startVal [time (s)] = 0.5
      sf [set every repeat] = 4
      size = [0.1,0.1]
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    SoundComponent beep
      sound = 1000
      volume = 0.05
      stopVal [duration (s)] = 0.05
      startVal [time (s)] = 0.5
    KeyboardComponent response
      correctAns = $correctAns
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'up','down'
      startVal [time (s)] = 0
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    TextComponent counter
      text [set every repeat] = $trials.thisN+1
      pos = (0.9, -0.9)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine init
    CodeComponent code_3
      Begin Experiment:
        bg_size = 800
        circ_size = 600
        circ_radius = circ_size/bg_size
  Routine thanks
    TextComponent text_2
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0
      letterHeight = 0.1
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      text:
        Experiment done

        Thanks!
  Routine blank
    PolygonComponent blank_background
      fillColor = $[-1,-1,-1]
      stopVal [duration (s)] = 1.0
      units = pix
      startVal [time (s)] = 0.0
      size = (800,800)
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  Routine practice_trial
    CodeComponent code_2
      Begin Routine:
        tgt_radius = random()*circ_radius*0.95
        angle = random()*359
        xpos = tgt_radius*cos(angle)
        ypos = tgt_radius*sin(angle)
        tgt_visibility = tgt_opacity*SorN
    PolygonComponent background_2
      fillColor = $[-0.075,-0.075,-0.075]
      units = pix
      startVal [time (s)] = 0.0
      size = [800,800]
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    PolygonComponent surround_2
      fillColor [set every repeat] = $[0,0,0]
      units = pix
      startVal [time (s)] = 0
      nVertices = 120
      size = (600, 600)
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    GratingComponent grating_2
      opacity [set every repeat] = $tgt_visibility
      tex = sin
      stopVal [duration (s)] = $tgt_sec
      mask = gauss
      pos [set every repeat] = $[xpos,ypos]
      units = norm
      startVal [time (s)] = 0.5
      sf [set every repeat] = 4
      size = [0.1,0.1]
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    SoundComponent beep_2
      sound = 1000
      volume = 0.05
      stopVal [duration (s)] = 0.05
      startVal [time (s)] = 0.5
    KeyboardComponent response_2
      correctAns = $correctAns
      forceEndRoutine = True
      allowedKeys = 'up','down'
      startVal [time (s)] = 0
      store = nothing
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    TextComponent counter_2
      text [set every repeat] = $practice_trials.thisN+1
      pos = (0.9, -0.9)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine init
  Routine instrux
  Routine practice_banner
  LoopInitiator practice_trials loopType="TrialHandler"
    conditionsFile = sdt_trials_o20_s50_p70.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'tgt_sec': 0.050000000000000003, 'correctAns': u'up', 'SorN': 1, 'tgt_opacity': 0.20000000000000001},
      {'tgt_sec': 0.050000000000000003, 'correctAns': u'up', 'SorN': 1, 'tgt_opacity': 0.20000000000000001},
      {'tgt_sec': 0.050000000000000003, 'correctAns': u'up', 'SorN': 1, 'tgt_opacity': 0.20000000000000001},
      {'tgt_sec': 0.050000000000000003, 'correctAns': u'up', 'SorN': 1, 'tgt_opacity': 0.20000000000000001},
      {'tgt_sec': 0.050000000000000003, 'correctAns': u'up', 'SorN': 1, 'tgt_opacity': 0.20000000000000001},
      {'tgt_sec': 0.050000000000000003, 'correctAns': u'up', 'SorN': 1, 'tgt_opacity': 0.20000000000000001},
      {'tgt_sec': 0.050000000000000003, 'correctAns': u'up', 'SorN': 1, 'tgt_opacity': 0.20000000000000001},
      {'tgt_sec': 0.050000000000000003, 'correctAns': u'down', 'SorN': 0, 'tgt_opacity': 0.20000000000000001},
      {'tgt_sec': 0.050000000000000003, 'correctAns': u'down', 'SorN': 0, 'tgt_opacity': 0.20000000000000001},
      {'tgt_sec': 0.050000000000000003, 'correctAns': u'down', 'SorN': 0, 'tgt_opacity': 0.20000000000000001}]
    Routine practice_trial
    Routine blank
  LoopTerminator practice_trials
  Routine main_banner
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = sdt_trials_o20_s50_p70.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [{'tgt_sec': 0.050000000000000003, 'correctAns': u'up', 'SorN': 1, 'tgt_opacity': 0.20000000000000001},
      {'tgt_sec': 0.050000000000000003, 'correctAns': u'up', 'SorN': 1, 'tgt_opacity': 0.20000000000000001},
      {'tgt_sec': 0.050000000000000003, 'correctAns': u'up', 'SorN': 1, 'tgt_opacity': 0.20000000000000001},
      {'tgt_sec': 0.050000000000000003, 'correctAns': u'up', 'SorN': 1, 'tgt_opacity': 0.20000000000000001},
      {'tgt_sec': 0.050000000000000003, 'correctAns': u'up', 'SorN': 1, 'tgt_opacity': 0.20000000000000001},
      {'tgt_sec': 0.050000000000000003, 'correctAns': u'up', 'SorN': 1, 'tgt_opacity': 0.20000000000000001},
      {'tgt_sec': 0.050000000000000003, 'correctAns': u'up', 'SorN': 1, 'tgt_opacity': 0.20000000000000001},
      {'tgt_sec': 0.050000000000000003, 'correctAns': u'down', 'SorN': 0, 'tgt_opacity': 0.20000000000000001},
      {'tgt_sec': 0.050000000000000003, 'correctAns': u'down', 'SorN': 0, 'tgt_opacity': 0.20000000000000001},
      {'tgt_sec': 0.050000000000000003, 'correctAns': u'down', 'SorN': 0, 'tgt_opacity': 0.20000000000000001}]
    Routine trial
    Routine blank
  LoopTerminator trials
  Routine thanks
