PsychoPy2experiment version="1.85.4"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = pix
  Window size (pixels) = [1200,900]
  Full-screen window = False
  expName = rating
  Screen = 1
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Routines
  Routine trial
    ImageComponent std1
      pos = [-400,100]
      units = pix
      startVal [time (s)] = 0.0
      image = images/lighthouse001.jpg
      size = [384,640]
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    ImageComponent std100
      pos = [400,100]
      units = pix
      startVal [time (s)] = 0.0
      image = images/lighthouse100.jpg
      size = [384,640]
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    ImageComponent test
      pos = [0,100]
      units = pix
      startVal [time (s)] = 0.5
      image [set every repeat] = $test_image
      size = [384,640]
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    TextComponent quality1
      text = quality = 1
      pos = (-400,-180)
      startVal [time (s)] = 0.0
      letterHeight = 35
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    TextComponent quality10
      text = quality = 10
      pos = (400, -180)
      startVal [time (s)] = 0.0
      letterHeight = 35
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    TextComponent quality
      text = quality = ?
      pos = (0, -180)
      startVal [time (s)] = 0.0
      letterHeight = 35
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    TextComponent counter
      text [set every repeat] = $trials.thisN+1
      pos = [550,-400]
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 35
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    RatingScaleComponent slider
      pos = [0,-300]
      high = 10
      startVal [time (s)] = 0.0
      markerStart = 4.5
      size = 1.0
      tickHeight = 0.75
      storeRatingTime = False
      forceEndRoutine = True
      low = 1
      categoryChoices = 1,2,3,4,5,6,7,8,9,10
      singleClick = True
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  Routine thanks
    TextComponent thanks_message
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      letterHeight = 20
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      text:
        Experiment complete!

        Thanks for your participation
  Routine instrux
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 20
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      text:
        This PsychoPy code implements a rating experiment.

        In the experiment you will be rating the quality of
        JPEG images compressed to different degrees.

        On each trial you will see three images in a row.
        The images on the left and right are standards
        with quality = 1 and quality = 10 which are the
        minimum and maximum qualities respectively.
        In the center you will see an image which has
        been compressed between (and including) these
        extremes.

        To rate the quality of this image, hover your mouse
        over the blue triangle and move it to left to right
        to change your rating. Clicking will enter your rating
        and move on to the next trial.

        There are 55 trials in the experiment.

        Press the spacebar to start the experiment.
    KeyboardComponent start_key
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instrux
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = rating_trials_lowlin.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'test_image': u'images/lighthouse001.jpg', 'jpeg_quality': 1},
      {'test_image': u'images/lighthouse005.jpg', 'jpeg_quality': 5},
      {'test_image': u'images/lighthouse010.jpg', 'jpeg_quality': 10},
      {'test_image': u'images/lighthouse015.jpg', 'jpeg_quality': 15},
      {'test_image': u'images/lighthouse020.jpg', 'jpeg_quality': 20},
      {'test_image': u'images/lighthouse025.jpg', 'jpeg_quality': 25},
      {'test_image': u'images/lighthouse030.jpg', 'jpeg_quality': 30},
      {'test_image': u'images/lighthouse050.jpg', 'jpeg_quality': 50},
      {'test_image': u'images/lighthouse070.jpg', 'jpeg_quality': 70},
      {'test_image': u'images/lighthouse090.jpg', 'jpeg_quality': 90},
      {'test_image': u'images/lighthouse100.jpg', 'jpeg_quality': 100}]
    Routine trial
  LoopTerminator trials
  Routine thanks
