PsychoPy2experiment version="1.85.4"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = pix
  Window size (pixels) = [1200,900]
  Full-screen window = False
  Save log file = False
  expName = paircomp
  Screen = 1
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Routines
  Routine trial
    CodeComponent code
      Begin Routine:
        import random


        dir_name = 'images/'
        base_name = 'image'
        ext_name = '.jpg'

        img1_id_str = str(img1_id).zfill(3)
        img1_name = dir_name + base_name + img1_id_str + ext_name

        img2_id_str = str(img2_id).zfill(3)
        img2_name = dir_name + base_name + img2_id_str + ext_name

        flip = random.randint(0,1)

        if flip == 1:
            img1_side = 'left'
            img2_side = 'right'
            resp_corr = 'right'
            img1_xpos = -200
            img2_xpos = 200
        else:
            img1_side = 'right'
            img2_side = 'left'
            resp_corr = 'left'
            img1_xpos = 200
            img2_xpos = -200

        expInfo['img1_side'] = img1_side
        expInfo['img2_side'] = img2_side
        expInfo['resp_corr'] = resp_corr
    ImageComponent img1
      pos [set every repeat] = $[img1_xpos,100]
      units = pix
      startVal [time (s)] = 0.5
      image [set every repeat] = $img1_name
      size = [384,640]
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    ImageComponent img2
      pos [set every repeat] = $[img2_xpos,100]
      units = pix
      startVal [time (s)] = 0.5
      image [set every repeat] = $img2_name
      size = [384,640]
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    TextComponent quality
      pos = (0, -260)
      startVal [time (s)] = 0.0
      letterHeight = 28
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      text:
        which image is of higher quality?
        use the left/right arrow keys to choose
    TextComponent counter
      text [set every repeat] = $trials.thisN+1
      pos = [550,-400]
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 35
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    KeyboardComponent resp
      correctAns = $resp_corr
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'left','right'
      startVal [time (s)] = 0.5
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  Routine thanks
    TextComponent thanks_message
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      letterHeight = 20
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      text:
        Experiment complete!

        Thanks for your participation
  Routine instrux
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 20
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      text:
        This PsychoPy code implements a pair comparison experiment.

        In the experiment you will be judging the quality of
        JPEG images with different levels of compression.

        On each trial you will see a pair of images.
        Your task is to indicate which image is of higher quality.
        To do this use the left and right arrow keys.

        There are 210 trials in the experiment.

        Press the spacebar to start.
    KeyboardComponent start_key
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instrux
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = paircomp_trials_50_80_5.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [{'img2_id': 55, 'img1_id': 50},
      {'img2_id': 60, 'img1_id': 50},
      {'img2_id': 65, 'img1_id': 50},
      {'img2_id': 70, 'img1_id': 50},
      {'img2_id': 75, 'img1_id': 50},
      {'img2_id': 80, 'img1_id': 50},
      {'img2_id': 60, 'img1_id': 55},
      {'img2_id': 65, 'img1_id': 55},
      {'img2_id': 70, 'img1_id': 55},
      {'img2_id': 75, 'img1_id': 55},
      {'img2_id': 80, 'img1_id': 55},
      {'img2_id': 65, 'img1_id': 60},
      {'img2_id': 70, 'img1_id': 60},
      {'img2_id': 75, 'img1_id': 60},
      {'img2_id': 80, 'img1_id': 60},
      {'img2_id': 70, 'img1_id': 65},
      {'img2_id': 75, 'img1_id': 65},
      {'img2_id': 80, 'img1_id': 65},
      {'img2_id': 75, 'img1_id': 70},
      {'img2_id': 80, 'img1_id': 70},
      {'img2_id': 80, 'img1_id': 75}]
    Routine trial
  LoopTerminator trials
  Routine thanks
