PsychoPy2experiment version="1.85.4"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = pix
  Window size (pixels) = [1200,900]
  Full-screen window = False
  Save log file = False
  expName = magest
  Screen = 1
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Routines
  Routine trial
    ImageComponent std_img
      pos [set every repeat] = [-200,100]
      units = pix
      startVal [time (s)] = 0.5
      image = images/image020.jpg
      size = [384,640]
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    TextComponent std_text
      text [set every repeat] = standard, quality = 20
      pos = (-200, -240)
      startVal [time (s)] = 0.5
      letterHeight = 28
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    CodeComponent test_img_code
      Begin Routine:
        dir_name = 'images/'
        base_name = 'image'
        ext_name = '.jpg'

        test_img_id_str = str(img_id).zfill(3)
        test_img_name = dir_name + base_name + test_img_id_str + ext_name
    ImageComponent test_img
      pos [set every repeat] = [200,100]
      units = pix
      startVal [time (s)] = 0.5
      image [set every repeat] = $test_img_name
      size = [384,640]
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    TextComponent test_text
      text [set every repeat] = test, quality =
      pos = (160, -240)
      startVal [time (s)] = 0.5
      letterHeight = 28
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    CodeComponent response_code
      Begin Experiment:
        inputText = ""
      Begin Routine:
        theseKeys=""
        shift_flag = False
        std_text.alignHoriz = 'center'
        test_text.alignHoriz = 'center'
        response_text.alignHoriz = 'left'
      End Routine:
        # let's store the final text string into the results finle...
        thisExp.addData('subResp', inputText)
        inputText=""
      Each Frame:
        n = len(theseKeys)
        i = 0
        while i < n:

            # return,enter - end trial, but only after numeric response
            if (theseKeys[i] in ('return','num_enter')):
                if ((inputText != '') & (inputText != '-')):
                    continueRoutine = False
                    break
                else:
                    break

            # backspace, delete, numlock (clear) - delete the final character on the string
            elif theseKeys[i] in ('backspace','delete','numlock'):
                inputText = inputText[:-1]
                i = i + 1

            # minus, num_subtract - toggle '-' as first char in string
            elif theseKeys[i] in ('minus','num_subtract'):
                if (inputText == ''): # if string empty enter -
                    inputText += '-'
                elif (inputText[i] != '-'): # if not - enter -
                    inputText = '-' + inputText
                elif (inputText[i] == '-'): # if already - remove -
                    inputText = inputText[1:]
                i = i + 1

            # 0-9 - keyboard 0-9, add digit to end of string
            elif (len(theseKeys[0]) == 1):
                inputText += theseKeys[i]
                i = i + 1

            # num_X - must be keypad 0-9, extract digit, add to end of string
            else:
                key_name = theseKeys[i]
                digit = key_name[4];
                inputText += digit
                i = i + 1
    KeyboardComponent response
      correctAns = $resp_corr
      forceEndRoutine = False
      allowedKeys = '1','2','3','4','5','6','7','8','9','0','num_1','num_2','num_3','num_4','num_5','num_6','num_7','num_8','num_9','num_0','return','num_enter','minus','num_subtract','backspace','delete','numlock'
      startVal [time (s)] = 0.5
      store = all keys
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    TextComponent response_text
      color = yellow
      text [set every frame] = $(inputText)
      pos = (255, -240)
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 28
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    TextComponent instrux_text
      wrapWidth = 700
      text = The standard image has a quality of 20. Use the keyboard to enter a numeric rating for the test image.
      pos = (0, -350)
      startVal [time (s)] = 0.0
      letterHeight = 28
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    TextComponent counter
      text [set every repeat] = $trials.thisN+1
      pos = [550,-400]
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 36
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  Routine thanks
    TextComponent thanks_message
      stopVal [duration (s)] = 3
      startVal [time (s)] = 0.0
      letterHeight = 20
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      text:
        Experiment complete!

        Thanks for your participation
  Routine instrux
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 20
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      text:
        This PsychoPy code implements a magnitude
        estimation experiment.

        In the experiment your will be shown a
        "standard" image with quality = 20 and
        on each trial you will be asked to
        use the keyboard or keypad to enter a
        numeric rating for a "test" image.

        Enter any number that you feel indicates
        the quality of the test image relative to
        the standard. There are no limits on the
        range of values, positive or negative, that
        you may use.

        There are 110 trials in the experiment.

        Press the spacebar to start.
    KeyboardComponent start_key
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instrux
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = magest_trials_1_100_5.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'img_id': 1},
      {'img_id': 5},
      {'img_id': 10},
      {'img_id': 15},
      {'img_id': 20},
      {'img_id': 25},
      {'img_id': 30},
      {'img_id': 35},
      {'img_id': 40},
      {'img_id': 45},
      {'img_id': 50},
      {'img_id': 55},
      {'img_id': 60},
      {'img_id': 65},
      {'img_id': 70},
      {'img_id': 75},
      {'img_id': 80},
      {'img_id': 85},
      {'img_id': 90},
      {'img_id': 95},
      {'img_id': 100}]
    Routine trial
  LoopTerminator trials
  Routine thanks
